private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
private function ShakeThenIncubateWithBeads(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_1;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  private variable loopCounter20;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
  NIST_DEVICE_CONTROLLERS::TerminateHHSs();
  NIST_DEVICE_CONTROLLERS::TerminateODTC(ODTC);
  {
    	HxFan.SetFanSpeed("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"); // SetFanSpeed
  }
}

private function StartUp(  ) void {
  private dialog customDialog_2;
  private dialog customDialog_3;
  private variable user_choice;
  private dialog customDialog_4;
  private dialog dialogHandle_5;
  {
    	HxFan.SetComPort("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"); // SetComPort
  }
  {
    	HxFan.SetFanSpeed("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"); // SetFanSpeed
  }
  {
    	HxFan.SetContinuousMode("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"); // SetContinuousMode
  }
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  primer_mix_volume = 100;
  dialogHandle_5.SetInputSize(1);
  dialogHandle_5.SetInputField(0, Translate("Primer mixing volume?"), hslFloat, primer_mix_volume, 0, 200);
  dialogHandle_5.ShowInput(Translate("Select mixing volume for Primer Plate (or zero for no primer mixing)"), hslInfinite, hslOKOnly | hslDefButton1);
  primer_mix_volume = dialogHandle_5.GetInputField(0);
  user_choice = 1;
  customDialog_3.InitCustomDialog("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");
  customDialog_3.ShowCustomDialog();
  user_choice = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  customDialog_2.InitCustomDialog("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");
  customDialog_2.ShowCustomDialog();
  user_choice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  SeqEdit2(ML_STAR.MlStar50ulTipWithFilter, ML_STAR, Translate("Edit Tip Sequence for 50 uL Tips"), Translate("Verify and/or edit the 50 uL tip sequence:"), 300, Translate(""), 0, ML_STAR.MlStar50ulTipWithFilter, 1, Translate(""));
  SeqEdit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR, Translate("Edit Tip Sequence for 300 uL Tips"), Translate("Verify and/or edit the 300 uL tip sequence:"), 300, Translate(""), 0, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, Translate(""));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  str_Global_ODTCIPAddress = Translate("192.168.88.253");
  var_Global_HHSNode3 = 3;
  SetTempHHS3 = 20;
  Initialize_HHS(HHS3, var_Global_HHSNode3);
  NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
  HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
  var_Global_HHSNode5 = 5;
  SetTempHHS5 = 20;
  Initialize_HHS(HHS5, var_Global_HHSNode5);
  NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS5, SetTempHHS5);
  HSLHamHeaterShaker::SetPlateLock(HHS5, 1);
  bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  NIST_DEVICE_CONTROLLERS::InitODTC(str_Global_ODTCIPAddress, ODTC);
  NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
  customDialog_4.InitCustomDialog("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");
  customDialog_4.ShowCustomDialog();
  user_choice = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable time_point_str;
  private variable key_exists;
  private variable param_file;
  private variable file_exists;
  private dialog customDialog_6;
  private dialog dialogHandle_7;
  private dialog customDialog_8;
  private dialog dialogHandle_9;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  param_file = "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv";
  file_exists = HSLExtensions::File::Exists(param_file);
  if (file_exists == 1)
  {
    file1.AddField(1, read_line, hslString);
    file1.SetDelimiter(hslAsciiText);
    if( 0 == file1.Open(param_file, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, param_file, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        loc = StrFind(read_line, ",");
        if (loc > 0)
        {
          split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
          HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "timePoint");
    if (key_exists == 1)
    {
      time_point_str = HSLExtensions::Dictionary::GetItem(param_dict, "timePoint");
      time_point = StrFVal(time_point_str);
      if (time_point > 4)
      {
        customDialog_8.InitCustomDialog("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");
        customDialog_8.ShowCustomDialog();
        abort;
      }
      else
      {
        if (time_point < 1)
        {
          customDialog_6.InitCustomDialog("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");
          customDialog_6.ShowCustomDialog();
          abort;
        }
      }
    }
    else
    {
      dialogHandle_7.SetInputSize(1);
      dialogHandle_7.SetInputField(0, Translate("Time Point?"), hslInteger, 1, 1, 4);
      dialogHandle_7.ShowInput(Translate("Select time point (1-4):"), hslInfinite, hslOKOnly | hslDefButton1);
      time_point = dialogHandle_7.GetInputField(0);
    }
  }
  else
  {
    dialogHandle_9.SetInputSize(1);
    dialogHandle_9.SetInputField(0, Translate("Time Point?"), hslInteger, 1, 1, 4);
    dialogHandle_9.ShowInput(Translate("Select time point (1-4):"), hslInfinite, hslOKOnly | hslDefButton1);
    time_point = dialogHandle_9.GetInputField(0);
  }
}

private function ShakeThenIncubateWithBeads(  ) void {
  private timer timer3;
  private timer timer2;
  HSLHamHeaterShaker::SetPlateLock(HHS5, 1);
  MECC::TraceComment(Translate("***** Now shaking at RT for 2min ......."));
  HSLHamHeaterShaker::StartShaker(HHS5, 1800);
  if( 0 == timer3.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS5);
  MECC::TraceComment(Translate("***** Now incubating at RT for 5min ......."));
  if( 0 == timer2.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 1, 1, ML_STAR);
  if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::SetPlateLock(HHS5, 0);
  MECC::TraceComment(Translate("***** Incubation finished..."));
}
